CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Original
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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
    Select the input image:Original
    Name the output image:CropOriginal
    Select the cropping shape:Rectangle
    Select the cropping method:Mouse
    Apply which cycle's cropping pattern?:First
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    Remove empty rows and columns?:Edges
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
Crop:[module_num:6|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
    Select the input image:Original
    Name the output image:CropOriginal
    Select the cropping shape:Previous cropping
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    Remove empty rows and columns?:All
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    Select the image with a cropping mask:CropOriginal
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
ColorToGray:[module_num:7|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
    Select the input image:CropOriginal
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ImageMath:[module_num:8|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedImage
    Image or measurement?:Image
    Select the first image:OrigGray
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:InvertedImage
    Name the primary objects to be identified:Pellet
    Typical diameter of objects, in pixel units (Min,Max):40,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.9375,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:Pellet
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Documents\PhD\PB-1\Autoclave Tests Continued\1100_123°C_30min_a_20210318_123847_H1S1
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|FileName_Original,Pellet|Location_Center_Z,Pellet|Location_Center_X,Pellet|Location_Center_Y,Pellet|AreaShape_MeanRadius,Pellet|AreaShape_EquivalentDiameter,Pellet|AreaShape_Orientation,Pellet|AreaShape_FormFactor,Pellet|AreaShape_BoundingBoxArea,Pellet|AreaShape_EulerNumber,Pellet|AreaShape_MaximumRadius,Pellet|AreaShape_MaxFeretDiameter,Pellet|AreaShape_Eccentricity,Pellet|AreaShape_Perimeter,Pellet|AreaShape_Solidity,Pellet|AreaShape_BoundingBoxMinimum_X,Pellet|AreaShape_BoundingBoxMinimum_Y,Pellet|AreaShape_Center_X,Pellet|AreaShape_Center_Y,Pellet|AreaShape_MinorAxisLength,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:1100_123_30a
    Overwrite existing files without warning?:No
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
ExportToDatabase:[module_num:12|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
    Output file location:Default Input Folder sub-folder|Documents\PhD\PB-1\Autoclave Tests Continued\1100_123°C_30min_a_20210318_123847_H1S1
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:1100_123_30a.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Experiment name:1100_123_30a
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    Export object relationships?:Yes
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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